<?xml version='1.0' encoding='utf-8'?>
<WorkflowBuilder xmlns="https://bonsai-rx.org/2018/workflow" xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core" xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" Version="2.7.1">
  <Description>Camera-only tracking check; centered X/Y error in pixels.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CameraCapture">
                <cv:Index>0</cv:Index>
                <cv:CaptureProperties>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Exposure</cv:Property>
                    <cv:Value>-7</cv:Value>
                  </cv:CapturePropertyAssignment>
                </cv:CaptureProperties>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TimeInterval" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="cv:RangeThreshold">
                  <cv:Lower>
                    <cv:Val0>75.555555555555557</cv:Val0>
                    <cv:Val1>0</cv:Val1>
                    <cv:Val2>0</cv:Val2>
                    <cv:Val3>0</cv:Val3>
                  </cv:Lower>
                  <cv:Upper>
                    <cv:Val0>255</cv:Val0>
                    <cv:Val1>0</cv:Val1>
                    <cv:Val2>0</cv:Val2>
                    <cv:Val3>0</cv:Val3>
                  </cv:Upper>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="cv:AdaptiveThreshold">
                  <cv:MaxValue>255</cv:MaxValue>
                  <cv:AdaptiveMethod>MeanC</cv:AdaptiveMethod>
                  <cv:ThresholdType>BinaryInv</cv:ThresholdType>
                  <cv:BlockSize>303</cv:BlockSize>
                  <cv:Parameter>57</cv:Parameter>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>163</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>BinaryInv</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>ConnectedComponent</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>20</cv:MinArea>
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ApproximatePolygon">
                <cv:Method>DouglasPeucker</cv:Method>
                <cv:Eps>0</cv:Eps>
                <cv:Recursive>true</cv:Recursive>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Centroid</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>ValidPoint</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>!single.IsNaN(X) &amp;&amp; !single.IsNaN(Y)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:WindowCount">
                  <rx:Count>10</rx:Count>
                  <rx:Skip>5</rx:Skip>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>X</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Average" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Y</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Average" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Orientation</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Size</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.Item1,Item2.Width</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Item1-(it.Item2/2)</scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.Item2,Item2.Height</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Item1-(it.Item2/2)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput">
              <Name>CenteredXYErrorPx</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="18" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="11" To="17" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="19" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="19" To="22" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="24" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
          </Edges>
        </Workflow>
        <Name>Camera Tracking Check</Name>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>