<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CreatePoint2f">
          <cv:X>0</cv:X>
          <cv:Y>0</cv:Y>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\ValidPoint.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Stabilizer.bonsai" />
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Zoomer.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\HeadTailGroup.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\OrientationVisualizer.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Zoomer.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source2" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="6" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="11" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="7" Label="Source2" />
      <Edge From="5" To="10" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="10" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="8" To="11" Label="Source2" />
      <Edge From="9" To="11" Label="Source4" />
      <Edge From="10" To="11" Label="Source3" />
    </Edges>
  </Workflow>
</WorkflowBuilder>