<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p1="clr-namespace:Bonsai.MvCamCtrl;assembly=Bonsai.MvCamCtrl"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p2="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:CameraCapture">
            <cv:Index>1</cv:Index>
            <cv:CaptureProperties>
              <cv:CapturePropertyAssignment>
                <cv:Property>Settings</cv:Property>
                <cv:Value>0</cv:Value>
              </cv:CapturePropertyAssignment>
            </cv:CaptureProperties>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Grayscale" />
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:MvCamCtrlCapture">
          <p1:Index>1</p1:Index>
          <p1:SerialNumber />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>cam1</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:RangeThreshold">
            <cv:Lower>
              <cv:Val0>75.555555555555557</cv:Val0>
              <cv:Val1>0</cv:Val1>
              <cv:Val2>0</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:Lower>
            <cv:Upper>
              <cv:Val0>255</cv:Val0>
              <cv:Val1>0</cv:Val1>
              <cv:Val2>0</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:Upper>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:AdaptiveThreshold">
            <cv:MaxValue>255</cv:MaxValue>
            <cv:AdaptiveMethod>MeanC</cv:AdaptiveMethod>
            <cv:ThresholdType>BinaryInv</cv:ThresholdType>
            <cv:BlockSize>303</cv:BlockSize>
            <cv:Parameter>57</cv:Parameter>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>90</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:MorphologicalOperator">
          <cv:Size>
            <cv:Width>3</cv:Width>
            <cv:Height>3</cv:Height>
          </cv:Size>
          <cv:Anchor>
            <cv:X>-1</cv:X>
            <cv:Y>-1</cv:Y>
          </cv:Anchor>
          <cv:Shape>Rectangle</cv:Shape>
          <cv:Iterations>3</cv:Iterations>
          <cv:Operation>Dilate</cv:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>ConnectedComponent</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>200</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="X" Selector="Centroid.X" />
          <Property Name="Y" Selector="Centroid.Y" />
        </PropertyMappings>
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CreatePoint2f">
          <cv:X>637.059265</cv:X>
          <cv:Y>370.380066</cv:Y>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>ValidPoint</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>!single.IsNaN(X) &amp;&amp; !single.IsNaN(Y)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Stabilizer.bonsai" />
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Zoomer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="Negate" />
            <Expression xsi:type="Add">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p2:Point2f">
                <Value>
                  <X>320</X>
                  <Y>240</Y>
                </Value>
              </Operand>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Translation" Selector="X,Y" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:AffineTransform">
                <cv:Pivot>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Pivot>
                <cv:Translation>
                  <cv:X>-317.059265</cv:X>
                  <cv:Y>-130.380066</cv:Y>
                </cv:Translation>
                <cv:Rotation>0</cv:Rotation>
                <cv:Scale>
                  <cv:X>1</cv:X>
                  <cv:Y>1</cv:Y>
                </cv:Scale>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Transform" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:WarpAffine">
                <cv:Transform>1,0,-317.0593;0,1,-130.3801</cv:Transform>
                <cv:Flags>Linear</cv:Flags>
                <cv:FillValue>
                  <cv:Val0>71</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                  <cv:Width>600</cv:Width>
                  <cv:Height>600</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HeadTailGroup</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:RangeThreshold">
                <cv:Lower>
                  <cv:Val0>70</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:Lower>
                <cv:Upper>
                  <cv:Val0>255</cv:Val0>
                  <cv:Val1>255</cv:Val1>
                  <cv:Val2>255</cv:Val2>
                  <cv:Val3>255</cv:Val3>
                </cv:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>ConnectedComponent</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea xsi:nil="true" />
                <cv:MaxArea>1200</cv:MaxArea>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Centroid</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:RangeThreshold">
                <cv:Lower>
                  <cv:Val0>80</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:Lower>
                <cv:Upper>
                  <cv:Val0>255</cv:Val0>
                  <cv:Val1>255</cv:Val1>
                  <cv:Val2>255</cv:Val2>
                  <cv:Val3>255</cv:Val3>
                </cv:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>ConnectedComponent</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea xsi:nil="true" />
                <cv:MaxArea>1200</cv:MaxArea>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionExtremes">
                <cv:Method>Radial</cv:Method>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>HEAD/TAIL</ipy:Name>
              <ipy:Script>
import clr
clr.AddReference("OpenCV.Net")
from System import Tuple, Math, Single
from OpenCV.Net import *
from math import sin, cos, pi


def distancesquare(pt1,pt2):
  dx = (pt2.X - pt1.X)
  dy = (pt2.Y - pt1.Y)
  return dx * dx + dy * dy

@returns(Tuple[Point2f,Point2f])
def process(value):
  centroid = value.Item1
  extreme1 = value.Item2
  extreme2 = value.Item3
  head = value.Item3
  tail = value.Item3

  if (distancesquare(centroid,extreme1) &lt;= distancesquare(centroid,extreme2)):
    head = extreme2
    tail = extreme1
  else:
    head = extreme1
    tail = extreme2

  #CV.Circle(output, Point(headState), 3, Scalar.Rgb(204, 0, 0), -1)

  #CV.Circle(output, Point(tailState), 3, Scalar.Rgb(0, 204, 0), -1)

  #CV.Circle(output, Point(headState), 2, Scalar.Rgb(0, 0, 204), -1)
  #CV.Circle(output, Point(tail), 2, Scalar.Rgb(0, 204, 0), -1)
  #CV.Circle(output, Point(head), 2, Scalar.Rgb(0, 0, 204), -1)
  return Tuple[Point2f,Point2f](head,tail)</ipy:Script>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="13" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="13" Label="Source2" />
            <Edge From="12" To="13" Label="Source3" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="17" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\OrientationVisualizer.bonsai" />
      <Expression xsi:type="GroupWorkflow">
        <Name>Zoomer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="Negate" />
            <Expression xsi:type="Add">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p2:Point2f">
                <Value>
                  <X>320</X>
                  <Y>240</Y>
                </Value>
              </Operand>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Translation" Selector="X,Y" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:AffineTransform">
                <cv:Pivot>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Pivot>
                <cv:Translation>
                  <cv:X>-334.714539</cv:X>
                  <cv:Y>-131.864258</cv:Y>
                </cv:Translation>
                <cv:Rotation>0</cv:Rotation>
                <cv:Scale>
                  <cv:X>1</cv:X>
                  <cv:Y>1</cv:Y>
                </cv:Scale>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Transform" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:WarpAffine">
                <cv:Transform>1,0,-334.7145;0,1,-131.8643</cv:Transform>
                <cv:Flags>Linear</cv:Flags>
                <cv:FillValue>
                  <cv:Val0>71</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                  <cv:Width>500</cv:Width>
                  <cv:Height>500</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:MvCamCtrlCapture">
          <p1:Index>0</p1:Index>
          <p1:SerialNumber />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>cam2</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="3" To="15" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="15" To="19" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="16" To="24" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="17" To="20" Label="Source2" />
      <Edge From="18" To="23" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="19" To="23" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="21" To="24" Label="Source2" />
      <Edge From="22" To="24" Label="Source4" />
      <Edge From="23" To="24" Label="Source3" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>