<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="wie:KeyDown">
            <wie:Filter>Left</wie:Filter>
            <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="StringProperty">
            <Value>G91 F500</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="io:SerialStringWrite">
            <io:PortName>COM4</io:PortName>
            <io:NewLine>\r\n</io:NewLine>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="StringProperty">
            <Value>G01 X1 F500</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:CombineLatest" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Item2</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="io:SerialStringWrite">
            <io:PortName>COM4</io:PortName>
            <io:NewLine>\r\n</io:NewLine>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:PortName>COM10</io:PortName>
          <io:BaudRate>115200</io:BaudRate>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>false</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Right</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Right</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>G91 F2000 G01 X-1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Command</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Left</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Left</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>G91 F2000 G01 X1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Command</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Up</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Up</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>G91 F2000 G01 Y-1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Command</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Down</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Down</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>G91 F2000 G01 Y1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Command</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:MouseMove" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Y</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>G91 F1000 G01 X</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Space</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SkipUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>End</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Convert.ToSingle(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Divide">
        <Operand xsi:type="IntProperty">
          <Value>5</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.ToString()</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Convert.ToSingle(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Divide">
        <Operand xsi:type="IntProperty">
          <Value>5</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.ToString()</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="MulticastSubject">
        <Name>Command</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="vid:VideoCaptureDevice">
            <vid:Index>0</vid:Index>
            <vid:Format>
              <vid:FrameSize>
                <vid:Width>1920</vid:Width>
                <vid:Height>1080</vid:Height>
              </vid:FrameSize>
              <vid:AverageFrameRate>60</vid:AverageFrameRate>
              <vid:MaximumFrameRate>60</vid:MaximumFrameRate>
              <vid:BitCount>24</vid:BitCount>
            </vid:Format>
            <vid:CaptureProperties />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Grayscale" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Crop">
            <cv:RegionOfInterest>
              <cv:X>98</cv:X>
              <cv:Y>43</cv:Y>
              <cv:Width>1672</cv:Width>
              <cv:Height>904</cv:Height>
            </cv:RegionOfInterest>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:RangeThreshold">
            <cv:Lower>
              <cv:Val0>39.666666666666664</cv:Val0>
              <cv:Val1>0</cv:Val1>
              <cv:Val2>0</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:Lower>
            <cv:Upper>
              <cv:Val0>71.777777777777771</cv:Val0>
              <cv:Val1>0</cv:Val1>
              <cv:Val2>0</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:Upper>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FindContours">
            <cv:Mode>ConnectedComponent</cv:Mode>
            <cv:Method>ChainApproxNone</cv:Method>
            <cv:Offset>
              <cv:X>0</cv:X>
              <cv:Y>0</cv:Y>
            </cv:Offset>
            <cv:MinArea xsi:nil="true" />
            <cv:MaxArea xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:ApproximatePolygon">
            <cv:Method>DouglasPeucker</cv:Method>
            <cv:Eps>0</cv:Eps>
            <cv:Recursive>true</cv:Recursive>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:BinaryRegionAnalysis" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:LargestBinaryRegion" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Centroid.X</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Centroid.Y</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:AdaptiveThreshold">
            <cv:MaxValue>255</cv:MaxValue>
            <cv:AdaptiveMethod>MeanC</cv:AdaptiveMethod>
            <cv:ThresholdType>BinaryInv</cv:ThresholdType>
            <cv:BlockSize>199</cv:BlockSize>
            <cv:Parameter>30</cv:Parameter>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FindContours">
            <cv:Mode>External</cv:Mode>
            <cv:Method>ChainApproxNone</cv:Method>
            <cv:Offset>
              <cv:X>0</cv:X>
              <cv:Y>0</cv:Y>
            </cv:Offset>
            <cv:MinArea xsi:nil="true" />
            <cv:MaxArea xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:BinaryRegionAnalysis" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:LargestBinaryRegion" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Centroid.X</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Centroid.Y</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Centroid.X</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Centroid.Y</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>G91 F500 G01</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Command</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>COM4</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Command</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM4</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FocusUP</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>A</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>M5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Command</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FocusDown</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Z</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>M3 S1000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Command</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="12" To="17" Label="Source1" />
      <Edge From="13" To="36" Label="Source1" />
      <Edge From="14" To="27" Label="Source1" />
      <Edge From="15" To="27" Label="Source3" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="17" To="19" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="19" To="29" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="22" To="24" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="38" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="31" To="33" Label="Source2" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source2" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source2" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="49" To="59" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="50" To="58" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="55" To="57" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="64" To="65" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>