<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="wie:KeyDown">
            <wie:Filter>Left</wie:Filter>
            <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="StringProperty">
            <Value>G91 F500</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="io:SerialStringWrite">
            <io:PortName>COM4</io:PortName>
            <io:NewLine>\r\n</io:NewLine>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="StringProperty">
            <Value>G01 X1 F500</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:CombineLatest" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Item2</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="io:SerialStringWrite">
            <io:PortName>COM4</io:PortName>
            <io:NewLine>\r\n</io:NewLine>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:PortName>COM8</io:PortName>
          <io:BaudRate>115200</io:BaudRate>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>false</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Right</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>Right</wie:Filter>
                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                </Combinator>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>G91 F4000 G01 X-1</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="MulticastSubject">
                <Name>Command</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="3" Label="Source2" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Left</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>Left</wie:Filter>
                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                </Combinator>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>G91 F2000 G01 X1</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="MulticastSubject">
                <Name>Command</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="3" Label="Source2" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Up</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>Up</wie:Filter>
                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                </Combinator>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>G91 F2000 G01 Y1</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="MulticastSubject">
                <Name>Command</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="3" Label="Source2" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Down</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>Down</wie:Filter>
                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                </Combinator>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>G91 F2000 G01 Y-1</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="MulticastSubject">
                <Name>Command</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="3" Label="Source2" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>0</p1:Index>
          <p1:ColorProcessing>Default</p1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:CameraCapture">
            <cv:Index>1</cv:Index>
            <cv:CaptureProperties>
              <cv:CapturePropertyAssignment>
                <cv:Property>FrameWidth</cv:Property>
                <cv:Value>640</cv:Value>
              </cv:CapturePropertyAssignment>
              <cv:CapturePropertyAssignment>
                <cv:Property>FrameHeight</cv:Property>
                <cv:Value>480</cv:Value>
              </cv:CapturePropertyAssignment>
              <cv:CapturePropertyAssignment>
                <cv:Property>Fps</cv:Property>
                <cv:Value>120</cv:Value>
              </cv:CapturePropertyAssignment>
            </cv:CaptureProperties>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="vid:VideoCaptureDevice">
            <vid:Index>0</vid:Index>
            <vid:Format>
              <vid:FrameSize>
                <vid:Width>1280</vid:Width>
                <vid:Height>720</vid:Height>
              </vid:FrameSize>
              <vid:AverageFrameRate>60</vid:AverageFrameRate>
              <vid:MaximumFrameRate>60</vid:MaximumFrameRate>
              <vid:BitCount>24</vid:BitCount>
            </vid:Format>
            <vid:CaptureProperties>
              <vid:CameraProperty>
                <vid:Property>Exposure</vid:Property>
                <vid:Value>0</vid:Value>
                <vid:ControlFlags>Auto</vid:ControlFlags>
              </vid:CameraProperty>
            </vid:CaptureProperties>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:RangeThreshold">
            <cv:Lower>
              <cv:Val0>75.555555555555557</cv:Val0>
              <cv:Val1>0</cv:Val1>
              <cv:Val2>0</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:Lower>
            <cv:Upper>
              <cv:Val0>255</cv:Val0>
              <cv:Val1>0</cv:Val1>
              <cv:Val2>0</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:Upper>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:AdaptiveThreshold">
          <cv:MaxValue>255</cv:MaxValue>
          <cv:AdaptiveMethod>MeanC</cv:AdaptiveMethod>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
          <cv:BlockSize>953</cv:BlockSize>
          <cv:Parameter>30</cv:Parameter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Threshold">
            <cv:ThresholdValue>74</cv:ThresholdValue>
            <cv:MaxValue>255</cv:MaxValue>
            <cv:ThresholdType>BinaryInv</cv:ThresholdType>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>ConnectedComponent</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>2000</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ApproximatePolygon">
          <cv:Method>DouglasPeucker</cv:Method>
          <cv:Eps>0</cv:Eps>
          <cv:Recursive>true</cv:Recursive>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Condition">
          <Name>ValidPoint</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="scr:ExpressionTransform">
                <scr:Expression>!single.IsNaN(X) &amp;&amp; !single.IsNaN(Y)</scr:Expression>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementCountWindow">
          <rx:Count>1</rx:Count>
          <rx:Skip>1</rx:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>X</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Average" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Y</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Average" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ImageSize</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1.Item1,Item2.Width</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.Item1-(it.Item2/2)</scr:Expression>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1.Item2,Item2.Height</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.Item1-(it.Item2/2)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>XYCommand</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>FocusUP</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>A</wie:Filter>
                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                </Combinator>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>M5</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="MulticastSubject">
                <Name>Command</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="3" Label="Source2" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>FocusDown</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>Z</wie:Filter>
                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                </Combinator>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>M3 S1000</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="MulticastSubject">
                <Name>Command</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="3" Label="Source2" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>XYPlotter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>G91 F5000 G01</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Command</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="io:SerialStringRead">
                  <io:PortName>COM4</io:PortName>
                  <io:NewLine>\r\n</io:NewLine>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Command</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringWrite">
                <io:PortName>COM8</io:PortName>
                <io:NewLine>\r\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>it,it</Selector>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>XYCommand</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CommandsGain</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Y</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>G91 F5000 G01 X</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value />
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>XYCommand</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>S</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SkipUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>End</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="IntProperty">
                <Value>800</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.ToString()</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="IntProperty">
                <Value>800</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.ToString()</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="MulticastSubject">
              <Name>Command</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Repeat" />
              </Builder>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="19" Label="Source1" />
            <Edge From="1" To="13" Label="Source1" />
            <Edge From="2" To="13" Label="Source3" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="15" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="10" To="17" Label="Source2" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="21" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="22" To="29" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="30" Label="Source1" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="30" To="33" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="35" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source2" />
      <Edge From="35" To="36" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>