<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p1="clr-namespace:Bonsai.MvCamCtrl;assembly=Bonsai.MvCamCtrl"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:Name>Delta</io:Name>
          <io:PortName>COM19</io:PortName>
          <io:BaudRate>115200</io:BaudRate>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>Two</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>false</io:DtrEnable>
          <io:RtsEnable>true</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>4096</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Right</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>Right</wie:Filter>
                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                </Combinator>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>G0 X-1 F1000</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="MulticastSubject">
                <Name>Command</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="3" Label="Source2" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Left</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>Left</wie:Filter>
                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                </Combinator>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>G0 X1 F1000</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="MulticastSubject">
                <Name>Command</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="3" Label="Source2" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Up</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>Up</wie:Filter>
                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                </Combinator>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>G0 Y1 F1000</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="MulticastSubject">
                <Name>Command</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="3" Label="Source2" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Z_Down</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>A</wie:Filter>
                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                </Combinator>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>G0 Z-0.1 F1000</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="MulticastSubject">
                <Name>Command</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="3" Label="Source2" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Down</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>Down</wie:Filter>
                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                </Combinator>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>G0 Y-1 F1000</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="MulticastSubject">
                <Name>Command</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="3" Label="Source2" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Z_Up</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>Q</wie:Filter>
                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                </Combinator>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>G0 Z0.1 F1000</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="MulticastSubject">
                <Name>Command</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="3" Label="Source2" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>G28 </Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Command</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Command</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>Delta</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\itsko\OneDrive\Desktop\deltarobot\commands.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>G90</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>G01 Z-263 F100</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>G91</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>M203 S8000</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>M204 A20000</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>M205 S800</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Command</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="StringProperty">
            <Value>G01 Z-355 F100</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Take">
            <rx:Count>1</rx:Count>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MulticastSubject">
          <Name>Command</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="io:SerialStringRead">
            <io:PortName>COM5</io:PortName>
            <io:NewLine>\r\n</io:NewLine>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>LOGFILE.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>Timestamp</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="FloatProperty">
            <Value>0</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>it,it</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>XYCommand</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>MouseControl</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:MouseMove" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>Y</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>G01 X</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value />
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>Space</wie:Filter>
                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:SkipUntil" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>End</wie:Filter>
                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:TakeUntil" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>X</Selector>
              </Expression>
              <Expression xsi:type="scr:ExpressionTransform">
                <scr:Expression>Convert.ToSingle(it)</scr:Expression>
              </Expression>
              <Expression xsi:type="Divide">
                <Operand xsi:type="IntProperty">
                  <Value>5</Value>
                </Operand>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Skip">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="Subtract" />
              <Expression xsi:type="scr:ExpressionTransform">
                <scr:Expression>it.ToString()</scr:Expression>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Expression>
              <Expression xsi:type="Add" />
              <Expression xsi:type="MemberSelector">
                <Selector>Y</Selector>
              </Expression>
              <Expression xsi:type="scr:ExpressionTransform">
                <scr:Expression>Convert.ToSingle(it)</scr:Expression>
              </Expression>
              <Expression xsi:type="Divide">
                <Operand xsi:type="IntProperty">
                  <Value>5</Value>
                </Operand>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Skip">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="Subtract" />
              <Expression xsi:type="scr:ExpressionTransform">
                <scr:Expression>it.ToString()</scr:Expression>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Expression>
              <Expression xsi:type="Add" />
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="Add" />
              <Expression xsi:type="MulticastSubject">
                <Name>Command</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Repeat" />
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="5" Label="Source1" />
              <Edge From="1" To="24" Label="Source1" />
              <Edge From="2" To="15" Label="Source1" />
              <Edge From="3" To="15" Label="Source3" />
              <Edge From="4" To="5" Label="Source2" />
              <Edge From="5" To="7" Label="Source1" />
              <Edge From="6" To="7" Label="Source2" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="7" To="17" Label="Source1" />
              <Edge From="8" To="9" Label="Source1" />
              <Edge From="9" To="10" Label="Source1" />
              <Edge From="10" To="11" Label="Source1" />
              <Edge From="10" To="12" Label="Source2" />
              <Edge From="11" To="12" Label="Source1" />
              <Edge From="12" To="13" Label="Source1" />
              <Edge From="13" To="14" Label="Source1" />
              <Edge From="14" To="15" Label="Source2" />
              <Edge From="15" To="16" Label="Source1" />
              <Edge From="16" To="26" Label="Source1" />
              <Edge From="17" To="18" Label="Source1" />
              <Edge From="18" To="19" Label="Source1" />
              <Edge From="19" To="20" Label="Source1" />
              <Edge From="19" To="21" Label="Source2" />
              <Edge From="20" To="21" Label="Source1" />
              <Edge From="21" To="22" Label="Source1" />
              <Edge From="22" To="23" Label="Source1" />
              <Edge From="23" To="24" Label="Source2" />
              <Edge From="24" To="25" Label="Source1" />
              <Edge From="25" To="26" Label="Source2" />
              <Edge From="26" To="27" Label="Source1" />
              <Edge From="27" To="28" Label="Source1" />
              <Edge From="28" To="29" Label="Source1" />
              <Edge From="29" To="30" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CommandsGain</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value> Y</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>G01 X</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>XYCommand</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>End</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ScalingFactorX" />
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="IntProperty">
                <Value>-100</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.ToString("F5")</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ScalingFactorY" />
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="IntProperty">
                <Value>-100</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.ToString("F5")</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>S</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SkipUntil" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Command</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Repeat" />
              </Builder>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="17" Label="Source1" />
            <Edge From="1" To="10" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="12" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="19" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="15" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="22" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="spk:SpinnakerCapture">
                  <spk:Index xsi:nil="true" />
                  <spk:ColorProcessing>Default</spk:ColorProcessing>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Image</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Skip">
                  <rx:Count>0</rx:Count>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CameraCapture">
                <cv:Index>0</cv:Index>
                <cv:CaptureProperties>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Exposure</cv:Property>
                    <cv:Value>4</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Settings</cv:Property>
                    <cv:Value>0</cv:Value>
                  </cv:CapturePropertyAssignment>
                </cv:CaptureProperties>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TimeInterval" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="cv:RangeThreshold">
                  <cv:Lower>
                    <cv:Val0>75.555555555555557</cv:Val0>
                    <cv:Val1>0</cv:Val1>
                    <cv:Val2>0</cv:Val2>
                    <cv:Val3>0</cv:Val3>
                  </cv:Lower>
                  <cv:Upper>
                    <cv:Val0>255</cv:Val0>
                    <cv:Val1>0</cv:Val1>
                    <cv:Val2>0</cv:Val2>
                    <cv:Val3>0</cv:Val3>
                  </cv:Upper>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="cv:AdaptiveThreshold">
                  <cv:MaxValue>255</cv:MaxValue>
                  <cv:AdaptiveMethod>MeanC</cv:AdaptiveMethod>
                  <cv:ThresholdType>BinaryInv</cv:ThresholdType>
                  <cv:BlockSize>303</cv:BlockSize>
                  <cv:Parameter>57</cv:Parameter>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>119</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>BinaryInv</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>ConnectedComponent</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>50</cv:MinArea>
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ApproximatePolygon">
                <cv:Method>DouglasPeucker</cv:Method>
                <cv:Eps>0</cv:Eps>
                <cv:Recursive>true</cv:Recursive>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Centroid</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>ValidPoint</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>!single.IsNaN(X) &amp;&amp; !single.IsNaN(Y)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:WindowCount">
                  <rx:Count>10</rx:Count>
                  <rx:Skip>5</rx:Skip>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>X</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Average" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Y</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Average" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Orientation</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Size</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.Item1,Item2.Width</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Item1-(it.Item2/2)</scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.Item2,Item2.Height</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Item1-(it.Item2/2)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>XYCommand</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MulticastSubject">
                <Name>XYCommand</Name>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="5" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="21" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="14" To="20" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="22" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="22" To="25" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="27" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source2" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="p1:MvCamCtrlCapture">
            <p1:Index>0</p1:Index>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Image</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:FileName>Camera1.avi</cv:FileName>
            <cv:Suffix>Timestamp</cv:Suffix>
            <cv:Buffered>true</cv:Buffered>
            <cv:Overwrite>false</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>30</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="p1:MvCamCtrlCapture">
            <p1:Index>1</p1:Index>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Image</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:FileName>Camera2.avi</cv:FileName>
            <cv:Suffix>Timestamp</cv:Suffix>
            <cv:Buffered>true</cv:Buffered>
            <cv:Overwrite>false</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>30</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="24" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="24" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="24" Label="Source3" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="24" Label="Source4" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="24" Label="Source5" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source6" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>